WorkflowBuilder
  Version=2.9.0
  Description: Calibrates the reward valves on the behavior board, one or all of them: fires known pulse widths, weighs what each burst delivers, and writes the weights to calibration\<FileName>-weights.csv beside this machine's rig.yml. All of them is interleaved (Channels, such as 1, 2): each burst is fired on each valve in turn, each weighed before the next, into one container on one balance. It measures only: rig-control builds each valve's curve from its rows once the run completes and writes it to that valve's calibration\*.json, where the rig's experiment workflows read it. rig-control's Calibrations page launches it with the lines and the board as its rig.yml gives them (PortName, OutputPulseEnable, Channel or Channels, FileName). The balance is read by eye or off the camera: each weight is given with the Weight command when the weigh metric asks for it. Before it, rig-control fires Drip commands (more pulses of the width weighed) until the balance moves, so a drop hanging on the spout falls first; a sample's drip pulses are added to its repeats. The procedure (pulse widths, repeats) is config\valve-calibration.yml, its widths scaled at Go so the smallest is the MinPulseMs parameter (ScaleWidths); before Go, Test commands fire a few pulses at a width so a valve's opening can be seen (TestBurst). On a rig with a lick spout stage (StepperDriver1PortName, StepperDriver2PortName, SpoutMotor1Position to SpoutMotor5Position, which rig-control gives from rig.yml and the newest mouse's saved positions), the stage is zeroed and the spouts moved to that in-position before Ready, and taken back once the last burst is weighed (Spouts). Ready once the board answers and the spouts are in; Go runs the procedure; Finished once every burst is weighed.
ExternalizedMapping
  ConfigRoot
    DisplayName=ConfigRoot
    Description="The root under which each machine has its own configuration directory, <ConfigRoot>\<MACHINE-NAME>\rig.yml; the weights are written into calibration\ there."
  Channel
    DisplayName=Channel
    Description="The behavior board line to calibrate, 1 to 3 (DO1 to DO3), when Channels is empty: one rig.yml lists in outputPulseEnable. rig-control gives it at launch."
  Channels
    DisplayName=Channels
    Description="The lines to calibrate together, interleaved, such as 1, 2: each burst fired on each in turn, each weighed before the next, so a run has a burst per line per sample. Empty: only Channel. rig-control gives it at launch for Calibrate All."
-> GroupWorkflow Settings
  Description: RigConfigDirectory is <ConfigRoot>\<MACHINE-NAME>, where the calibration writes its weights. ValveCalibrationSettings is config\valve-calibration.yml expanded over the valves (InterleaveValves, src\Extensions): each sample once per valve in Channels (else the one Channel), in turn, and the priming pulses once per valve, so ManualBalance, RunCalibration and the weights file all follow the bursts as they fire. Fails at startup if the machine has no configuration directory.
  Workflow
    ExternalizedMapping(ConfigRoot(DisplayName=ConfigRoot))
    -> OpenRigs.Core.ResolveRigConfigDirectory(ConfigRoot=C:\Coen-Lab-Local\RigConfigs)
    -> AsyncSubject RigConfigDirectory

    Bonsai.IO.ReadAllText(Path=..\config\valve-calibration.yml)
    -> OpenRigs.Core.Calibration.DeserializeFromYaml(Type=TypeMapping<OpenRigs.Core.Calibration.DispenseCalibration>)
    -> Take(Count=1) => #5
    ExternalizedMapping(Channel(DisplayName=Channel), Channels(DisplayName=Channels)) => #6
    #5, #6 -> CoenQcCalibrateValve.InterleaveValves(Channel=1, Channels="")
    -> AsyncSubject ValveCalibrationSettings

    BehaviorSubject<System.Boolean> SpoutsReady

ExternalizedMapping(SubjectId, SessionId)
-> GroupWorkflow Initialization
  Description: The experiment controller (OpenRigs.Control, ExperimentControl) over TCP 5561, which the rig agent relays. Weight takes each weight read off the balance. Drip fires a drip while a weight is due, published on DripCommands. Reports Recording at Go.
  Workflow
    ExternalizedMapping(SubjectId, SessionId)
    -> IncludeWorkflow
      Path=OpenRigs.Control:ExperimentControl.bonsai
      SubjectId=""
      SessionId=""
      ControlEndpoint=@tcp://127.0.0.1:5561
      Parameters
        Parameter
          Name=CameraExposureUs
          Value=""
          Description: The calibration camera's exposure in microseconds, taken by the camera at once, so the balance's display can be made readable: the nearest power of two of a second a USB camera allows (15625 is 1/64 s). Starts at 15625.
          Minimum=100
          Maximum=1000000
        Parameter
          Name=MinPulseMs
          Value=20
          Description: The shortest pulse width calibrated, in ms, set per rig on rig-control's Calibrations page: at Go every width of config\valve-calibration.yml is scaled so its smallest is this (the largest 5 times it), the pulses as written (ScaleWidths).
          Minimum=5
          Maximum=100
      Commands
        Command(Name=Weight, Description="The balance's reading, in grams, given when the weigh metric asks for it.")
        Command
          Name=Drip
          Description: Fires a drip while a weight is due, so a drop hanging on the spout falls before the reading: the text is its pulses, at the width being weighed on its valve (for the baseline, also the line, such as 1 DO2). A sample's drip pulses are added to its repeats.
        Command
          Name=Snapshot
          Description: Saves the calibration camera's latest frame, full size, as calibration\images\<text>.jpg beside rig.yml: rig-control's Calibrations page reads the balance from it.
        Command
          Name=Test
          Description: Before Go, fires pulses to see a valve open at a width: the text is the width in ms, the pulses and the line, such as 20 10 DO1 (TestBurst). Not counted anywhere; ignored after Go.

    SubscribeSubject ExperimentGo
    -> OpenRigs.Control.ReportPhase(Phase=Recording)

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnCommand(Name=Drip)
    -> PublishSubject DripCommands

ExternalizedMapping
  PortName(DisplayName=PortName, Description="The behavior board's serial port: rig.yml's behaviorBoard: main: portName, which rig-control gives at launch.")
  OutputPulseEnable
    DisplayName=OutputPulseEnable
    Description="The board lines that pulse, such as DO1, DO2: rig.yml's pulseController outputPulseEnable, which rig-control gives at launch."
-> GroupWorkflow Hardware
  Description: The behavior board on PortName, with the PulseController pulsing the OutputPulseEnable lines: its TriggerCalibratedPulse fires one pulse of a given width on a line, as in a session. The balance is read by eye (OpenRigs.Devices ManualBalance): from Go it asks for each weight in the weigh metric and publishes the one given with the Weight command on BalanceReading. Ready 1 s after the board's first event, once the PulseController's setup has gone out. The calibration camera (Pip, 10 Nov 2026) is a USB camera plugged in on the balance, a different one on each rig and in no rig.yml: OpenRigs.Video UsbCamera opens the first that is not the rig's own (none of rig.yml's camera serials, no FLIR or Basler vendor id), free-running, and publishes its frames as Camera-Temporary.Data, which LiveView streams as a temporary device and Snapshots saves; none plugged in stops the workflow at start, saying so. Nothing is recorded. Its exposure is the controller's CameraExposureUs parameter, the rig cameras' name and unit (Pip, 10 Nov 2026: one setting for one meaning), taken at the nearest power of two of a second the camera allows: it starts at 15625 (1/64 s) and takes each value the controller sets (OnParameterSet) straight to the open camera, so rig-control's Calibrations page can make the balance's display readable; ParameterDefault shows the starting value 1 s in, once the controller is up. No gain: a USB camera's has no unit common to its models. No camera trigger runs, so DO0 and DO1 stay free.
  Workflow
    ExternalizedMapping(PortName(DisplayName=PortName))
    -> IncludeWorkflow
      Path=OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai
      CommandsSubjectName=BehaviorBoard-Main.Commands
      PortName=COMx
      DumpRegisters=true
      Heartbeat=Enabled
      EventsSubjectName=BehaviorBoard-Main.Data

    ExternalizedMapping(OutputPulseEnable(DisplayName=OutputPulseEnable))
    -> IncludeWorkflow
      Path=OpenRigs.Devices:BehaviorBoard.PulseController.bonsai
      BehaviorCommandsSubjectName=BehaviorBoard-Main.Commands
      OutputPulseEnable="DO1 DO2"
      PulseDO1=10
      PulseDO2=10
      PulseDO3=10
      BehaviorEventsSubjectName=BehaviorBoard-Main.Data
      TriggerPulseSubjectName=TriggerPulse
      TriggerCalibratedPulseSubjectName=TriggerCalibratedPulse

    PublishSubject<OpenRigs.Core.WeightMeasurement> BalanceReading

    SubscribeSubject ValveCalibrationSettings
    -> SelectMany ManualBalance
      Description: A balance read by eye, OpenRigs.Devices ManualBalance. From Go it follows the procedure's bursts by their pulses, on BurstPulses (never a drip's: drips fire on TriggerCalibratedPulse alone, so its count of bursts holds), and, once each has landed, asks for a weight in the weigh metric; the next weight typed with the Weight command is forwarded to BalanceReading as that burst's reading. Ready 1 s after the board's first event: the PulseController sends its setup (pulse mode on the OutputPulseEnable lines) 0.5 s after it, and a Go before that would fire the first pulse with the line not yet in pulse mode.
      Workflow
        WorkflowInput Source1

        SubscribeSubject ControlEvents
        -> OpenRigs.Control.OnCommand(Name=Weight)
        -> PublishSubject WeightEntries

        SubscribeSubject ExperimentGo
        -> OpenRigs.Control.ParameterValue(Name=MinPulseMs) => #20
        SubscribeSubject ValveCalibrationSettings => #5
        #20, #5 -> Zip
        -> CoenQcCalibrateValve.ScaleWidths
        -> IncludeWorkflow(Path=OpenRigs.Devices:ManualBalance.bonsai, RequestSubjectName=BurstPulses, EntriesSubjectName=WeightEntries, ReadingsSubjectName=ManualReading)
        -> OpenRigs.Control.ReportMetric(Name=weigh)

        SubscribeSubject ManualReading
        -> MulticastSubject BalanceReading
        -> WorkflowOutput

        SubscribeSubject BehaviorBoard-Main.Data
        -> Take(Count=1)
        -> Delay(DueTime=PT1S) => #16
        SubscribeSubject SpoutsReady => #17
        #16, #17 -> Zip
        -> Take(Count=1)
        -> OpenRigs.Control.ReportPhase(Phase=Ready)

    BehaviorSubject<System.Tuple(System.Int32,System.Int32)> BurstPulses

    DoubleProperty(Value=15625) => #10
    -> Delay(DueTime=PT1S)
    -> OpenRigs.Control.ParameterDefault(Name=CameraExposureUs)
    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=CameraExposureUs)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression: Convert.ToDouble(it)
    #10, #13 -> Merge
    -> PropertyMapping(ExposureTime)
    -> OpenRigs.Video.UsbCamera(ConfigRoot=C:\Coen-Lab-Local\RigConfigs, DevicePath="", FrameWidth=1920, FrameHeight=1080, ExposureTime=15625)
    -> BehaviorSubject Camera-Temporary.Data

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnCommand(Name=Test) => #19
    SubscribeSubject ExperimentGo => #20
    #19, #20 -> TakeUntil
    -> CoenQcCalibrateValve.TestBurst(InterPulseIntervalMs=80)
    -> MulticastSubject TriggerCalibratedPulse

ExternalizedMapping
  FileName
    DisplayName=FileName
    Description="The run's file name without extension, such as valve-DO1, or valve-all for every valve together: the weights go to calibration\<FileName>-weights.csv, and rig-control writes each valve's curve from them to its own calibration\*.json. rig-control gives it at launch."
-> GroupWorkflow Calibration
  Description: Reports the valves and the weights file as the target metric. At Go, RunCalibration with ValveCalibrationSettings (the bursts of OpenRigs.Core's DispenseCalibration, without its fit, expanded over the valves): it primes each valve and weighs a baseline, then fires each burst on its valve through TriggerCalibratedPulse (ValvePulseBurst) and weighs on BalanceReading. Each burst is written as it is weighed to calibration\<FileName>-weights.csv in RigConfigDirectory (columns size, repeats, before, after, channel: its pulse width in ms, its pulses with the drips fired after it (SampleDrips), the grams before and after it, and its line, 1 to 3; replaced every run). No fit here: once the run completes, rig-control splits the rows by channel, builds each valve's curve and writes it to that valve's calibration\*.json, with history, refusing one that is not monotone. Reports how many bursts were weighed as the points metric, then Finished. Each weighing is zipped with its drips from SampleDrips, which never completes, so SampleDrips is cut off once RunCalibration's last weighing has passed (Last, TakeUntil): a Zip whose first input has ended still waits for its second, and without the cut the rows never ended, so Finished was never reported (10 Nov 2026: Calibrate All stuck after its last weight).
  Workflow
    ExternalizedMapping(Value(DisplayName=FileName))
    -> StringProperty(Value=valve-DO1) => #1
    SubscribeSubject ValveCalibrationSettings
    -> CoenQcCalibrateValve.DescribeValves => #3
    #3, #1 -> Zip
    -> Take(Count=1) => #5
    -> Format(Format="{0} into calibration/{1}-weights.csv", Selector="Item1,Item2")
    -> OpenRigs.Control.ReportMetric(Name=target)
    SubscribeSubject RigConfigDirectory => #8
    #8, #5 -> Zip => #9
    -> Format(Format={0}\calibration\{1}-weights.csv, Selector="Item1,Item2.Item2")
    -> SelectMany WriteWeights
      Description: The weights file, opened only once its path is known: a CsvWriter creates its file when the workflow starts, from whatever FileName it has then, and RigConfigDirectory (an AsyncSubject) arrives a moment later, so a writer mapped from it directly wrote into the workflow's own folder, the lab clone, every run. Started by the path, it writes the rows CalibrationWeights carries.
      Workflow
        WorkflowInput Source1
        -> PropertyMapping(FileName) => #1
        SubscribeSubject CalibrationWeights => #2
        #2, #1 -> Bonsai.IO.CsvWriter(FileName=valve-weights.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
        -> WorkflowOutput
    -> Count
    -> Format(Format="{0} bursts weighed")
    -> OpenRigs.Control.ReportMetric(Name=points)
    -> OpenRigs.Control.ReportPhase(Phase=Finished)
    #9 -> Format(Format={0}\calibration\{1}-pulses.csv, Selector="Item1,Item2.Item2")
    -> SelectMany WritePulses
      Description: The board's own record of every pulse, beside the weights: each write the behavior board answers, stamped with its clock, to calibration\<FileName>-pulses.csv (columns Seconds, Register, Value; replaced every run). OutputSet is a line set (Value its lines as a number: DO1 = 2048, DO2 = 4096, DO3 = 8192), the start of a pulse as the board did it; PulseDO1 to PulseDO3 the width written just before, in ms. Bursts are timed on the PC, so these rows show what the board really fired: pulses closer than their width merged (Pip, 11 Nov 2026: valves over-delivering 12 to 27% against their curves). Opened once its path is known, as WriteWeights, and closed with the last weighing.
      Workflow
        WorkflowInput Source1
        -> PropertyMapping(FileName) => #1
        SubscribeSubject BehaviorBoard-Main.Data
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #3
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputSet)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: new(Seconds, "OutputSet" as Register, Convert.ToInt32(Value) as Value)
        #3 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPulseDO1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: new(Seconds, "PulseDO1" as Register, Convert.ToInt32(Value) as Value)
        #3 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPulseDO2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: new(Seconds, "PulseDO2" as Register, Convert.ToInt32(Value) as Value)
        #3 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPulseDO3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
          Expression: new(Seconds, "PulseDO3" as Register, Convert.ToInt32(Value) as Value)
        #5, #7, #9, #11 -> Merge => #12
        SubscribeSubject CalibrationWeights
        -> Last => #14
        #12, #14 -> TakeUntil => #15
        #15, #1 -> Bonsai.IO.CsvWriter(FileName=valve-pulses.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
        -> WorkflowOutput

    SubscribeSubject ExperimentGo
    -> OpenRigs.Control.ParameterValue(Name=MinPulseMs) => #30
    SubscribeSubject ValveCalibrationSettings => #13
    #30, #13 -> Zip
    -> CoenQcCalibrateValve.ScaleWidths
    -> SelectMany RunCalibration => #16
      Description: OpenRigs.Core DispenseCalibration's bursts (lib-open-rigs src\OpenRigs.Core\DispenseCalibration.bonsai, copied 7 Nov 2026), without its fit and file writing: primes each valve and weighs a baseline, then each sample's burst on its valve (ValvePulseBurst, src\Extensions) and its weighing, in turn. The settings sit in a scoped subject so every step reads the same values. Output: each burst once weighed, as ((grams after, grams before), its sample).
      Workflow
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject DispenseSettings

        SubscribeSubject DispenseSettings => #2
        SubscribeSubject DispenseSettings
        -> PropertyMapping(SettleWindow(Selector=Procedure.SettleWindow), TimeoutSeconds(Selector=Procedure.WeighTimeoutS)) => #4
        #2, #4 -> CreateObservable PrimeAndWeighBaseline => #5
          Description: Fires the priming burst to fill the line, then weighs the baseline once it has landed. While it is due, each Drip fires on the line it names (DripBurst), at the largest sample's width, so each spout's hanging drop falls first; those pulses count nowhere. The priming burst's pulses also go on BurstPulses, which ManualBalance counts; a drip's never do. BurstPulses is a BehaviorSubject: a MulticastSubject passes on its source's completion, which ends a PublishSubject for good, so the priming burst's end would leave ManualBalance deaf to every sample (8 Nov 2026: a run stopped at Firing sample 1).
          Workflow
            WorkflowInput Source1
            -> MemberSelector(Selector=Procedure) => #1
            -> CoenQcCalibrateValve.ValvePulseBurst(Channel=1) => #2
            -> MulticastSubject TriggerCalibratedPulse => #3
            SubscribeSubject BalanceReading => #4
            ExternalizedMapping(SettleWindow, TimeoutSeconds) => #5
            #2, #4, #5 -> OpenRigs.Core.WeighStable(SettleWindow=10, TimeoutSeconds=60)
            -> WorkflowOutput
            SubscribeSubject DripCommands => #8
            #8, #1 -> CoenQcCalibrateValve.DripBurst(Channel=1)
            -> MulticastSubject TriggerCalibratedPulse
            #3 -> MulticastSubject BurstPulses
        SubscribeSubject DispenseSettings
        -> MemberSelector(Selector=Procedure.Samples)
        -> Concat => #8
        SubscribeSubject DispenseSettings
        -> PropertyMapping(SettleWindow(Selector=Procedure.SettleWindow), TimeoutSeconds(Selector=Procedure.WeighTimeoutS)) => #10
        #8, #10 -> CreateObservable FireAndWeighSample => #11
          Description: One sample: fires its burst of pulses, then weighs once the last has landed. While it is due, each Drip fires more pulses of its width on its valve (DripBurst), until rig-control sees the balance move; the drip pulses fired before the weighing go on SampleDrips, for its row's repeats. SampleDrips is a BehaviorSubject, as each sample's Count completes and would end a PublishSubject after the first sample, and the Zip of rows with it (8 Nov 2026: a run Finished after sample 2 with one row). The burst's own pulses also go on BurstPulses, which ManualBalance counts; a drip's never do. The samples run in turn, each starting after the previous weighing.
          Workflow
            WorkflowInput Source1 => #0
            -> CoenQcCalibrateValve.ValvePulseBurst(Channel=1) => #1
            -> MulticastSubject TriggerCalibratedPulse => #2
            SubscribeSubject BalanceReading => #3
            ExternalizedMapping(SettleWindow, TimeoutSeconds) => #4
            #1, #3, #4 -> OpenRigs.Core.WeighStable(SettleWindow=10, TimeoutSeconds=60) => #5
            -> WorkflowOutput
            SubscribeSubject DripCommands => #7
            #7, #0 -> CoenQcCalibrateValve.DripBurst(Channel=1)
            -> MulticastSubject TriggerCalibratedPulse => #9
            #9, #5 -> TakeUntil
            -> Count
            -> MulticastSubject SampleDrips
            #2 -> MulticastSubject BurstPulses
        #5, #11 -> Concat
        -> Concat => #13
        -> Skip(Count=1) => #14
        #14, #13 -> Zip => #15
        SubscribeSubject DispenseSettings
        -> MemberSelector(Selector=Procedure.Samples)
        -> Concat => #18
        #15, #18 -> Zip
        -> WorkflowOutput
    -> Last => #26
    SubscribeSubject SampleDrips => #24
    #24, #26 -> TakeUntil => #27
    #16, #27 -> Zip
    -> CoenQcCalibrateValve.ValveWeighingRow(Channel=1)
    -> PublishSubject CalibrationWeights

    BehaviorSubject<System.Int32> SampleDrips

GroupWorkflow Snapshots
  Description: Each Snapshot command saves the calibration camera's latest frame (Camera-Temporary.Data), full size, as <RigConfigDirectory>\calibration\images\<the command's text>.jpg, the folder made if need be. rig-control's Calibrations page asks for one once each weight is due and reads the balance's display from it, so no one types the weight. A Snapshot before the camera's first frame saves nothing. Before LiveView, which must stay the last node: it streams only subjects built before it.
  Workflow
    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnCommand(Name=Snapshot) => #1
    SubscribeSubject RigConfigDirectory => #2
    #1, #2 -> WithLatestFrom
    -> Format(Format={1}\calibration\images\{0}.jpg, Selector="Item1,Item2") => #4
    SubscribeSubject Camera-Temporary.Data => #5
    #4, #5 -> WithLatestFrom
    -> SelectMany SaveStill(Description="The frame saved to the path: the path mapped onto SaveImage's FileName before the frame reaches it.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(FileName) => #2
        #0 -> MemberSelector(Selector=Item2) => #3
        #3, #2 -> Bonsai.Vision.SaveImage(FileName=snapshot.jpg, Suffix=None)
        -> WorkflowOutput

ExternalizedMapping
  StepperDriver1PortName
    DisplayName=StepperDriver1PortName
    Description="The lick spout stage's first StepperDriver board (motors 1 to 3), rig.yml's stepperDriver: a: portName, which rig-control gives at launch; empty on a rig with no stage, which then moves nothing."
  StepperDriver2PortName
    DisplayName=StepperDriver2PortName
    Description="The stage's second StepperDriver board (motors 4 and 5), rig.yml's stepperDriver: b: portName, which rig-control gives at launch."
  SpoutMotor1Position
    DisplayName=SpoutMotor1Position
    Description="The in-position of motor 1 (the base), in steps from its home switch: rig-control gives each motor's from the newest mouse's calibration\LickSpoutPositions\<mouse>.csv, its columns motor 1 to 5."
  SpoutMotor2Position(DisplayName=SpoutMotor2Position, Description="The in-position of motor 2 (the left spout's), in steps.")
  SpoutMotor3Position(DisplayName=SpoutMotor3Position, Description="The in-position of motor 3 (the right spout's), in steps.")
  SpoutMotor4Position(DisplayName=SpoutMotor4Position, Description="The in-position of motor 4 (the left spout's), in steps.")
  SpoutMotor5Position(DisplayName=SpoutMotor5Position, Description="The in-position of motor 5 (the right spout's), in steps.")
-> GroupWorkflow Spouts
  Description: The spouts forward for the calibration (Pip, 10 Nov 2026), so each valve's drops land as in a session: on a rig with a lick spout stage (StepperDriver1PortName given), Stage zeroes it, moves it to a mouse's in-position and the in/out motors fully forward before Ready, and back to the in-position once the last weighing has passed; on one without, SpoutsReady at once and nothing moves. Last in the workflow, after the Calibration group whose CalibrationWeights it watches.
  Workflow
    ExternalizedMapping(Value(DisplayName=StepperDriver1PortName))
    -> StringProperty(Value="") => #1
    ExternalizedMapping(Value(DisplayName=StepperDriver2PortName))
    -> StringProperty(Value="") => #3
    ExternalizedMapping(Value(DisplayName=SpoutMotor1Position))
    -> IntProperty(Value=0) => #5
    ExternalizedMapping(Value(DisplayName=SpoutMotor2Position))
    -> IntProperty(Value=0) => #7
    ExternalizedMapping(Value(DisplayName=SpoutMotor3Position))
    -> IntProperty(Value=0) => #9
    ExternalizedMapping(Value(DisplayName=SpoutMotor4Position))
    -> IntProperty(Value=0) => #11
    ExternalizedMapping(Value(DisplayName=SpoutMotor5Position))
    -> IntProperty(Value=0) => #13
    #5, #7, #9, #11, #13 -> Zip => #14
    #1, #3, #14 -> Zip
    -> Take(Count=1) => #16
    -> Condition Stage?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 != ""
        -> WorkflowOutput
    -> SelectMany Stage
      Description: The lick spout stage, only on a rig whose rig.yml has one. Both StepperDriver boards on their ports, set up as av-dome sets them (InitialiseStepperDriverSettings, ReadSwitchStates: copied from av-dome's StepperDriver group, 10 Nov 2026), every motor zeroed on its home switch (ZEROMotors), then moved to the in-position (SpoutMotor1Position to SpoutMotor5Position, a mouse's saved positions), then both in/out motors (motors 2 and 3, rig.yml's Radial left and right) fully forward to 15000 steps, the rest held (Pip, 12 Nov 2026: a fixed number until the travel is measured, BACKLOG), and SpoutsReady 5 s later (15000 steps at 280 us, plus 0.5 s). Once the last weighing has passed (CalibrationWeights ends), every motor goes back to the in-position: a Stop moves nothing.
      Workflow
        WorkflowInput Source1
        -> AsyncSubject StageSettings

        BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #2
        SubscribeSubject StageSettings
        -> PropertyMapping(PortName(Selector=Item1)) => #4
        #2, #4 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
        -> BehaviorSubject StepperDriver1Events

        BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #7
        SubscribeSubject StageSettings
        -> PropertyMapping(PortName(Selector=Item2)) => #9
        #7, #9 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
        -> BehaviorSubject StepperDriver2Events

        BehaviorSubject<System.Boolean> SteppersZEROed

        GroupWorkflow InitialiseStepperDriverSettings
            SubscribeSubject StepperDriver1Events
            -> Take(Count=20)
            -> TakeLast(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> Unit
            -> SelectMany "Initialize StepperDriver1"
                WorkflowInput Source1

                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate100Hz)) => #12
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                Disable PropertyMapping(Motor0StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #19
                Disable PropertyMapping(Motor1StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #21
                Disable PropertyMapping(Motor2StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=280)) => #23
                #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #19, #21, #23 -> Concat
                -> MulticastSubject StepperDriver1Commands
                -> WorkflowOutput
            -> Delay(DueTime=PT0.1S) => #6
            SubscribeSubject StepperDriver2Events
            -> Take(Count=20)
            -> TakeLast(Count=1)
            -> Delay(DueTime=PT0.2S)
            -> Unit
            -> SelectMany "Initialize StepperDriver2"
                WorkflowInput Source1

                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                Disable PropertyMapping(Motor0StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #16
                Disable PropertyMapping(Motor1StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #18
                #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #16, #18 -> Concat
                -> MulticastSubject StepperDriver2Commands
                -> WorkflowOutput
            -> Delay(DueTime=PT0.1S) => #13
            #6, #13 -> Zip
            -> BooleanProperty(Value=true)
            -> BehaviorSubject StepperDriversInitialized => #16
            Annotation "Ensure I get the initial states"(Text="") => #17
            #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
            -> MulticastSubject StepperDriver1Commands
            #18 -> MulticastSubject StepperDriver2Commands

        GroupWorkflow ReadSwitchStates
            SubscribeSubject StepperDriver1Events
            -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
            -> CoenQcCalibrateValve.UnpackSwitchTriggers => #2
            -> Index(Operand=IntProperty(Value=0))
            -> BehaviorSubject _Motor0_switchState
            #2 -> Index(Operand=IntProperty(Value=1))
            -> BehaviorSubject _Motor1_switchState
            #2 -> Index(Operand=IntProperty(Value=2))
            -> BehaviorSubject _Motor2_switchState

            SubscribeSubject StepperDriver2Events
            -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
            -> CoenQcCalibrateValve.UnpackSwitchTriggers => #11
            -> Index(Operand=IntProperty(Value=0))
            -> BehaviorSubject _Motor3_switchState
            #11 -> Index(Operand=IntProperty(Value=1))
            -> BehaviorSubject _Motor4_switchState

        GroupWorkflow ZEROMotors
          Description: av-dome's zeroing (its ZEROMotors, Extensions\ZEROingMotors.bonsai): once both boards are set up, each of the five motors moves off its home switch if it is on it, then back until the switch, where its count is set to 0. 2 s after the last, SteppersZEROed. A plain Delay where av-dome waits on the Harp clock (HarpDelay): this workflow has no timestamp generator. The watchdog ends the workflow, naming the stages still missing, if zeroing has not finished 60 s from the start.
          Workflow
            IncludeWorkflow => #0
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor0_switchState
              MotorID=0
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor0_switchState
            IncludeWorkflow => #1
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor1_switchState
              MotorID=1
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor1_switchState
            IncludeWorkflow => #2
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor2_switchState
              MotorID=2
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor2_switchState
            IncludeWorkflow => #3
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor3_switchState
              MotorID=0
              SubjectName_StepperDriver=StepperDriver2Commands
              SubjectName_switchState_again=_Motor3_switchState
            IncludeWorkflow => #4
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor4_switchState
              MotorID=1
              SubjectName_StepperDriver=StepperDriver2Commands
              SubjectName_switchState_again=_Motor4_switchState
            #0, #1, #2, #3, #4 -> Zip => #5
            -> Delay(DueTime=PT2S) => #6
            -> BooleanProperty(Value=true)
            -> MulticastSubject SteppersZEROed
            #0 -> StringProperty(Value=Motor0) => #9
            #1 -> StringProperty(Value=Motor1) => #10
            #2 -> StringProperty(Value=Motor2) => #11
            #3 -> StringProperty(Value=Motor3) => #12
            #4 -> StringProperty(Value=Motor4) => #13
            #5 -> StringProperty(Value=AllZeroed) => #14
            #6 -> StringProperty(Value=Settled) => #15
            SubscribeSubject StepperDriversInitialized
            -> Take(Count=1)
            -> StringProperty(Value=StepperDriversInitialized) => #18
            #18, #9, #10, #11, #12, #13, #14, #15 -> Merge
            -> CoenQcCalibrateValve.StartupWatchdog
              Expected="StepperDriversInitialized, Motor0, Motor1, Motor2, Motor3, Motor4, AllZeroed, Settled"
              TimeoutSeconds=60
              What="Zeroing the spout steppers (needed for Ready)"

        SubscribeSubject SteppersZEROed
        -> Condition Zeroed?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it
            -> WorkflowOutput
        -> Take(Count=1) => #18
        SubscribeSubject StageSettings
        -> MemberSelector(Selector=Item3) => #20
        #18, #20 -> Zip
        -> MemberSelector(Selector=Item2) => #22
        -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)
        #22 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(0.5 + 0.00028 * Math.Max(Math.Max(Math.Max(Math.Abs(it.Item1), Math.Abs(it.Item2)), Math.Max(Math.Abs(it.Item3), Math.Abs(it.Item4))), Math.Abs(it.Item5)))
        -> SelectMany WaitForTheMove => #25
          Description: Waits the time the longest move takes (its steps at the boards' 280 us a step, plus 0.5 s), mapped onto the Delay from a subject, so the Delay has its time before it starts.
          Workflow
            WorkflowInput Source1
            -> AsyncSubject MoveTime

            SubscribeSubject MoveTime
            -> PropertyMapping(DueTime) => #3
            SubscribeSubject MoveTime => #4
            #4, #3 -> Delay(DueTime=PT30S)
            -> WorkflowOutput
        SubscribeSubject StageSettings
        -> MemberSelector(Selector=Item3) => #38
        #25, #38 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #41
          Expression: new(it.Item1 as Item1, 15000 as Item2, 15000 as Item3, it.Item4 as Item4, it.Item5 as Item5)
        -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)
        #41 -> Delay(DueTime=PT5S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject SpoutsReady
        -> WorkflowOutput

        SubscribeSubject CalibrationWeights
        -> TakeLast(Count=1) => #29
        SubscribeSubject StageSettings
        -> MemberSelector(Selector=Item3) => #31
        #29, #31 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it.Item1 as Item1, it.Item2 as Item2, it.Item3 as Item3, it.Item4 as Item4, it.Item5 as Item5)
        -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)
    #16 -> Condition NoStage?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 == ""
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject SpoutsReady

OpenRigs.LiveView.StreamDevices LiveView
  Description: Streams the devices in this machine's rig.yml that the workflow publishes, over ZeroMQ, for rig-control's Calibrations page: the calibration camera, a temporary device in no rig.yml (Camera-Temporary.Data), as Camera-Temporary.video on TCP 5558 (5 JPEG frames a second at 320 x 240), data on 5556. Live only: nothing is recorded. Last in the workflow, because it streams only subjects built before it.
  ConfigRoot=C:\Coen-Lab-Local\RigConfigs
  DataPort=5556
  VideoPort=5558
